Journal
Description: Calcium Kinetic Analysis
Version VersionNumber=2.4
Comment: Paula Gedraitis, March 2018

Comment: Modify wavelength names here as needed
Configure Multi Wavelength Cell Scoring Summary Log
  stLogConfigParam = "RSX                                X                                                                                                                                                 XX                                                                                                                                                                                                                                                              "
Stop/Resume Logging to Database
  bStartLogging = FALSE
Assign Variable
  AnalysisImage = "FITC"
Assign Variable
  AnalysisImage2 = "DAPI"

Comment: Set up data and region saving
Assign Variable
  ParentFolder = "G:\DD Fluo4,DAPI analysis results"
Assign Variable
  ParentFolder = IF(RIGHT(ParentFolder,1)="\", ParentFolder, ParentFolder + "\")
Create Directory
  stCreateDirectory = "%ParentFolder%"
Assign Variable
  ExperimentName = Review.PlateName + "_" + STR(Review.PlateID)
Assign Variable
  DataDirectory = ParentFolder + ExperimentName + "_Data\"
Create Directory
  stCreateDirectory = "%DataDirectory%"

Comment: Identify Fluo4-labeled cells in minimum projection of FITC time series
Stack Arithmetic
  iOperation = 2
  imStack = "%AnalysisImage%"
  imResult = "Minimum"
Basic Filters
  imSource = m 1 7 9 0 1 11 0 8 Untitled
  imResult = "MedianFilter"
  nOperation = 2
  nFilterWidth = 10
  nFilterHeight = 10
  nSubSample = 1
  Percentile = 50
  Depth16Sel = 1
  dScalingFactor = 0.9
  byResultScale = 10
  bAutoResultScale = FALSE
  mKernelTypeSharpen = 1
Multi Wavelength Cell Scoring
  imObjectSrc = m 1 7 9 0 1 12 0 8 Untitled m 0 6 9 17 1 -1 -1 29 Multi Wavelength Cell Scoring m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
  imObjectDest = "Cells"
  stName = "All nuclei" "Dead" "mCherry" "W4" "W5" "W6" "W7"
  nLegendColor = 0 4 4 3 4 5 6
  nStainedArea = 1 1 2 1 1 1 1
  dApproxMinWidth = 10 5 11 5 5 5 5
  dApproxMaxWidth = 30 20 30 30 30 30 30
  dMinIntensity = 500 4000 50 100 100 100 100
  dMinArea = 0 0 50 50 50 50 50
  stCustomProfileNames = "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" ""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
  nNumWaves = 1
  bObjectResult = TRUE
  ASSAY_config_summary_log_string = "RSX                                                                                                                                                                                                                                                                                                                                                                                                                                                  "
  ASSAY_config_data_log_string = "RO                                                                   "
  iRootAlgorithm = 1
Threshold Image
  srcThresh = m 1 7 9 0 1 13 0 8 Untitled
  min = 1
  max = 65535
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 1
  bTransparentThresh = TRUE
  dTransparencyPct = 0.49
  byThreshRed = 128
  byThreshGreen = 255
  byThreshBlue = 255
  nThreshDisplayMode = 1
Binary Operations
  imSource = m 1 7 9 0 1 13 0 8 Untitled
  imDest = "Binary"
  bUseThresholdVars = TRUE
  nThresholdState = 1
  uThresholdMin = 1
  uThresholdMax = 53727
Dilate Image
  imSource = m 1 7 9 0 1 15 0 8 Untitled
  imDest = "Dilate"
  nThresh = 3
  cRepeat = 3
  bDilateWithoutClose = FALSE
Create Regions Around Objects
  imSource = m 1 7 9 0 1 16 0 8 Untitled
Transfer Regions
  imSourceImage = m 1 7 9 0 1 16 0 8 Untitled
  imDestImage = "%AnalysisImage%"
  nRegionSel = 2
  bSrcClear = TRUE
  bDstClear = TRUE
Close
  im = m 1 7 9 0 1 13 0 8 Untitled
  bSaveIt = FALSE

Assign Variable
  ScoringDirectory = DataDirectory + "MWCS\"
Create Directory
  stCreateDirectory = "%ScoringDirectory%"
Assign Variable
  Well = IF(INSTR(Image.StageLabel, "Site"), LEFT(Image.StageLabel, INSTR(Image.StageLabel, "Site")-4),Image.StageLabel)
Assign Variable
  Site = IF(INSTR(Image.StageLabel, "Site"), VAL(RIGHT(Image.StageLabel, LEN(Image.StageLabel)-INSTR(Image.StageLabel, "Site")-4)),1)
Assign Variable
  RegionFileName = ExperimentName + "_" + Well + "_s" + STR(Site)
Assign Variable
  ScoringFilePath = ScoringDirectory + RegionFileName + ".csv"
Open Summary Log
  bOpenFile = TRUE
  bOpenDDE = FALSE
  stOpenFile = "C:\Users\Data Analysis\Desktop\KZ-DRG-Fluo4-capsaicin_1015_MWCS\KZ-DRG-Fluo4-capsaicin_1015_#_s1.csv" Override=Variable OverrideVariable=ScoringFilePath
  nOpenFileMode = 0 Override=None OverrideVariable=File Mode
  stDDEContext = "Excel:Sheet1	1	1" Override=None OverrideVariable=DDE Context
Multi Wavelength Cell Scoring
  imObjectSrc = m 1 7 9 0 1 12 0 8 Untitled m 1 6 11 0 0 -1 -1 16 %AnalysisImage2% m 0 6 9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
  imObjectDest = m 1 2 9 2 1 -1 -1 8 Untitled
  stName = "All nuclei" "DEAD" "FUS" "TUJ" "W5" "W6" "W7"
  nLegendColor = 0 3 1 5 4 5 6
  nStainedArea = 1 1 3 2 1 1 1
  dApproxMinWidth = 10 6 5 5 5 5 5
  dApproxMaxWidth = 30 25 15 30 30 30 30
  dMinIntensity = 500 1500 1500 10000 100 100 100
  dMinArea = 0 10 0 50 50 50 50
  stCustomProfileNames = "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" "" ""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
  nNumWaves = 2
  bObjectResult = FALSE
  ASSAY_config_summary_log_string = "NPROX                                X                                                                                                                                                                                                                 XX                                                                                                                                                                                              "
  ASSAY_config_data_log_string = "RO                                                                   "
  iRootAlgorithm = 1
Close Summary Log



Comment: No need for changes here: Save Regions and Data setup
Assign Variable
  RegionDirectory = DataDirectory+ "Regions\"
Create Directory
  stCreateDirectory = "%RegionDirectory%"
Select Image
  im = "%AnalysisImage%"
  prompt = ""

Comment: No need for changes here: Save Regions
Assign Variable
  RegionFilePath = RegionDirectory + RegionFileName + ".rgn"
IfThenElse Expression=Image.NumRegions > 0
  CodeBlock Condition=true
    Save Regions
      stFilename = "C:\MX6\regions.rgn" Override=Variable OverrideVariable=RegionFilePath
      saveImage = "%AnalysisImage%"

Comment: No need for changes here: output data to summary/data logs
Assign Variable
  CellDataPath = DataDirectory + RegionFileName + ".csv"
Close Data Log
Open Data Log
  bOpenFile = TRUE
  bOpenDDE = FALSE
  stOpenFile = "C:\Data\Data.LOG" Override=Variable OverrideVariable=CellDataPath
  nOpenFileMode = 0 Override=None OverrideVariable=File Mode
  stDDEContext = "" Override=None OverrideVariable=DDE Context
Region Measurements
  imSource = "%AnalysisImage%"
  nSelectorPlane = 10
  nTab = 1
  nPopInclude = 0
  nDisplayViews = 0
  nRegionLabel = 1
  nChannel = 0
  bUseThreshold = FALSE
  abMeasurements = TRUE FALSE TRUE FALSE TRUE TRUE FALSE FALSE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE TRUE FALSE FALSE FALSE FALSE FALSE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
  abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 1 0 0 0
  anPopGraphYAxis = 1 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 1
  strGraphSettings = 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
  bLogCalibration = FALSE
  bLogHeaders = TRUE
Close Data Log

Comment: No need for changes here: close intermediate images
Close
  im = m 1 7 9 0 1 11 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 12 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 15 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 16 0 8 Untitled
  bSaveIt = FALSE
